PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  End Message = ご協力ありがとうございました.
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychopy_slider_test
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent question_text
      letterHeight = 0.045
      pos = (0, 0.32)
      startVal [time (s)] = 0.0
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      text:
        今の音を聴いて、時間が長く感じましたか？
        Did the sound make the time feel longer?

        1 = 全くそう思わない / Strongly disagree
        7 = とてもそう思う / Strongly agree
    SliderComponent rating_time_long
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = ["1", "2", "3", "4", "5", "6", "7"]
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.1, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent label_left
      letterHeight = 0.045
      pos = (-0.42, -0.38)
      startVal [time (s)] = 0.0
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    TextComponent label_right
      letterHeight = 0.045
      pos = (0.42, -0.38)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
